OpenViBE-Scenario

GDF file reader => #0
  Filename = ${Path_Samples}/signals/tie-fighter-freetime.gdf
  Samples per buffer = 32
Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Identity => #1
Input 1=#1.Output stream 3, Input 2=#1.Output stream 3, Input 3=#1.Output stream 3, Input 4=#1.Output stream 3, Input 5=#1.Output stream 3, Input 6=#1.Output stream 3, Input 7=#1.Output stream 3 -> Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
  Button 3 ON = OVTK_StimulationId_Label_04
  Button 3 OFF = OVTK_StimulationId_Label_05
  Button 4 ON = OVTK_GDF_Stage_1
  Button 4 OFF = OVTK_StimulationId_Label_0C
  Button 5 ON = OVTK_GDF_Stage_2
  Button 5 OFF = OVTK_StimulationId_Label_0D
  Button 6 ON = OVTK_GDF_Stage_3
  Button 6 OFF = OVTK_StimulationId_Label_0E
  Button 7 ON = OVTK_GDF_Stage_4
  Button 7 OFF = OVTK_StimulationId_Label_0F
#1.Output stream 2 -> Temporal filter - GPL => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 4.246961
  Max crop value = 12.595946
-> Simple DSP => #9
  Equation = x-8.421453
-> Analog VRPN server
  Peripheral name = openvibe-vrpn
Signal=#9 -> Signal display "Beta Power"
  Time Scale = 100.000000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
Signal=#3, Stimulations=#1.Output stream 3 -> Signal display "Beta Signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
