OpenViBE-Scenario

Generic stream reader
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
-> Reference channel
  Reference channel = 2
-> Channel selector
  Channels list = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Selection by index = false
-> Spatial filter
  Spatial filter coefficients = 4 0 -1 0 -1 -1 0 0 -1 0 0 4 0 -1 0 0 -1 -1 0 -1
  Number of output channels = 2
  Number of input channels = 10
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 128.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.006250
-> Spectral analysis - GPL => #6
  Spectral components = Amplitude
#6.Amplitude -> Time-frequency map display
  Time Scale = 3.000000
  Minimum frequency to display = 6.000000
  Maximum frequency to display = 28.000000
#6.Amplitude -> 0xc67a01dc Power spectrum display
  Minimum frequency to display = 6.000000
  Maximum frequency to display = 28.000000
